PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'Age': '', 'Gender': "['male', 'female']"}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 500
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = TDT_LHDrescher_exp
  eyetracker = SR Research Ltd
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Routines
  Routine instr1
    TextComponent instr_practice
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Welkom!

        Tijdens dit experiment ga je telkens 1 van 2 letters zien.

        Als de letter Q verschijnt moet je zo snel mogelijk de antwoordknop indrukken.

        Als de letter O verschijnt moet je niets doen.

        We gaan dit even oefenen.
  Routine bl_int2
    TextComponent fc2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
      text = +
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    CodeComponent bl2_tracker_msgs
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage("start_trial bl2")
        eyetracker.sendMessage("start_phase bl2")
        eyetracker.sendMessage(f"var subject_nr {expInfo['participant']}")
        eyetracker.sendMessage(f"var condition {cond}")
        print("Baseline interval 2 started.")
      End Routine:
        eyetracker.sendMessage("end_phase bl2")
        eyetracker.sendMessage("end_trial bl2")
        print("Baseline interval 2 ended.")
  Routine instr2
    TextComponent instr_exp_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Nu komt de echte taak. Er zijn drie onderdelen van 10 minuten met telkens een pauze ertussen. Elk onderdeel heeft een andere snelheid. Probeer je goed te concentreren en zo stil mogelijk te blijven liggen.

        Soms gebeurt er even niets (ook in het begin). Wacht dan gewoon op de volgende letter met de ogen open.

        Probeer oogknipperen niet te onderdrukken tijdens de taak.

        !! Probeer zo SNEL én CORRECT mogelijk te reageren !!
    CodeComponent print_pract_done
      Code Type = Auto->JS
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      Begin Routine:
        print("Practice block completed. Start scan.")
  Routine start_exp
    TextComponent start_exp_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        De taak begint automatisch (nog enkele seconden).

        Eerst zie je alleen het fixatiekruis, kijk niet weg en houd je bereid. De letters verschijnen even later.
  Routine practicetrial
    TextComponent stimulus_pract
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $stim
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    TextComponent isi_pract
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 2.2
      text = +
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    KeyboardComponent pract_resp
      allowedKeys = 'space', None
      correctAns = $corrResp
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
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    cedrusButtonBoxComponent buttonBox_2
      allowedKeys = 3,3
      correctAns = corrButton
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      store = first key
      storeCorrect = True
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine bl_int3
    TextComponent fc3
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = +
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  Routine pause
    TextComponent pause_text1
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Pauze (30 seconden).

        Laat je ogen even rusten.
    CodeComponent pause_conditional
      Code Type = Auto->JS
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      Begin Experiment:
        count_pauses = 0
      Begin Routine:
        if count_pauses == 2:
            continueRoutine = False
      End Routine:
        count_pauses += 1
  Routine bl_int1
    TextComponent fc1
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = +
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    CodeComponent bl1_tracker_msgs
      Code Type = Auto->JS
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      Begin Routine:
        eyetracker.sendMessage("start_trial bl1")
        eyetracker.sendMessage("start_phase bl1")
        eyetracker.sendMessage(f"var subject_nr {expInfo['participant']}")
        eyetracker.sendMessage(f"var condition {cond}")
        print("Baseline interval 1 started.")
      End Routine:
        eyetracker.sendMessage("end_phase bl1")
        eyetracker.sendMessage("end_trial bl1")
        print("Baseline interval 1 ended.")
  Routine feedback
    CodeComponent fb_msg_code
      Code Type = Auto->JS
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      Begin Experiment:
        msg='msg not updated'#if this comes up we forgot to update the msg!
      Begin Routine:
        if trialtype == 2 and not buttonBox_2.corr:
            msg="Geen respons. Reageer op de letter Q!"
            msgColor = "darkorange"
            print("practice trial: omission error")
        elif buttonBox_2.corr: #stored on last run routine
            msg="Correct!"
            msgColor = "palegreen"
            print("practice trial: correct")
        else:
            msg="Fout :("
            msgColor = "darkorange"
            print("practice trial: comission error")
    TextComponent fb_text
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine trial
    TextComponent stimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $stim
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    TextComponent isi_fc
      color = black
      durationEstim = 1.7
      letterHeight = 0.07
      startVal [time (s)] = 0.3
      stopVal [time (s)] = $isi
      text = +
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    KeyboardComponent response
      allowedKeys = 'space', None
      correctAns = $corrResp
      disabled = True
      durationEstim = 2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      storeCorrect = True
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    CodeComponent tracker_msgs
      Code Type = Auto->JS
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      Begin Routine:
        if currentLoop == firsthalf:
            eyetracker.sendMessage(f"start_trial {thisFirsthalf['trial_index']}")
            eyetracker.sendMessage(f"start_phase {thisFirsthalf['stim']}")
            eyetracker.sendMessage(f"var trialtype {thisFirsthalf['trialtype']}")
            print(f"eyetracking msgs sent: trial {thisFirsthalf['trial_index']} trialtype {thisFirsthalf['trialtype']}")
            if cond == "fast":
                eyetracker.sendMessage(f"var validSeq {thisFirsthalf['validSeq']}")
        elif currentLoop == secondhalf:
            eyetracker.sendMessage(f"start_trial {thisSecondhalf['trial_index']}")
            eyetracker.sendMessage(f"start_phase {thisSecondhalf['stim']}")
            eyetracker.sendMessage(f"var trialtype {thisSecondhalf['trialtype']}")
            print(f"eyetracking msgs sent: trial {thisSecondhalf['trial_index']} trialtype {thisSecondhalf['trialtype']}")
            if cond == "fast":
                eyetracker.sendMessage(f"var validSeq {thisSecondhalf['validSeq']}")

        eyetracker.sendMessage(f"var subject_nr {expInfo['participant']}")
        eyetracker.sendMessage(f"var condition {cond}")
      End Routine:
        if currentLoop == firsthalf:
            eyetracker.sendMessage(f"end_phase {thisFirsthalf['stim']}")
            eyetracker.sendMessage(f"end_trial {thisFirsthalf['trial_index']}")
            print(f"Stimulus: {thisFirsthalf['stim']}, trialnumber {thisFirsthalf['trial_index']}")
        elif currentLoop == secondhalf:
            eyetracker.sendMessage(f"end_phase {thisSecondhalf['stim']}")
            eyetracker.sendMessage(f"end_trial {thisSecondhalf['trial_index']}")
            print(f"Stimulus: {thisSecondhalf['stim']}, trialnumber {thisSecondhalf['trial_index']}")
    cedrusButtonBoxComponent buttonBox_3
      allowedKeys = 3,3
      correctAns = corrButton
      deviceNumber = 0
      discard previous = True
      durationEstim = 2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      store = first key
      storeCorrect = True
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine end
    TextComponent goodbye_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Einde van de taak.

        Hartelijk dank voor je inspanning.
  Routine start_secure
    TextComponent start_secure_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Druk nog een keer op de responsknop.
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  Routine eyelink_setup
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.iohub import launchHubServer
        from psychopy.core import getTime, wait


        iohub_config = {'eyetracker.hw.sr_research.eyelink.EyeTracker':
                        {'name': 'tracker',
                         'model_name': 'EYELINK 1000 DESKTOP',
                         'runtime_settings': {'sampling_rate': 500,
                                              'track_eyes': 'RIGHT'}
                         }
                        }
        io = launchHubServer(**iohub_config)

        # Get the eye tracker device.
        tracker = io.devices.tracker


        # run eyetracker calibration
        r = tracker.runSetupProcedure()
      Begin Routine:
        # Check for and print any eye tracker events received...
        tracker.setRecordingState(True)

        stime = getTime()
        while getTime()-stime < 2.0:
            for e in tracker.getEvents():
                print(e)
  Routine eyelink_setup_2
  Routine wait_for_trigger
    TextComponent trigger_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wachten op de scanner...
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    cedrusButtonBoxComponent cedrus_trigger
      allowedKeys = 4,4
      deviceNumber = 0
      discard previous = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = False
      syncScreenRefresh = True
      useBoxTimer = False
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  Routine dialogue
    CodeComponent dialoguebox_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Set the event rate ('fast', 'mod', 'slow')
        current_Condition = expInfo['Event rate']

        # Set the condition order (counterbalancing)
        counterbalancing = int(expInfo['Condition/scan nr'])

        # True if practice is wanted (first condition).
        insert_Practice = counterbalancing == 1

        # True if pause is wanted (first 2 conditions). Suppresses end message.
        # If False, end message will be run instead.
        insert_Pause = counterbalancing != 3
  Routine start_eyetracker
    CodeComponent start_eyetracking
      Code Type = Auto->JS
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      Begin Routine:
        # Start eyetracker
        eyetracker.setConnectionState(True)
        io.clearEvents('all')
        eyetracker.setRecordingState(True)
    TextComponent et_recording_start
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Eyetracker opname starten...
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  Routine stop_eyetracker
    CodeComponent end_eyetracking
      Code Type = Auto->JS
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      End Routine:
        # Stop recording
        eyetracker.setRecordingState(False)
        eyetracker.setConnectionState(False)
    TextComponent et_recording_stop
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Eyetracker opname beëindigen...
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  Routine set_condition
    CodeComponent cond_set_code
      Code Type = Auto->JS
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      Begin Experiment:
        count_conditions = 0
      Begin Routine:
        # Set the event rate ('fast', 'mod', 'slow')
        current_Condition = cond
      End Routine:
        # Count the conditions
        count_conditions += 1
  EyetrackerCalibrationRoutine EyeLink_calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine EyeLink_calibration
  Routine start_eyetracker
  Routine instr1
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialtype', 1), ('corrResp', 'None'), ('stim', 'O')]),
      OrderedDict([('trialtype', 2), ('corrResp', 'space'), ('stim', 'Q')]),
      OrderedDict([('trialtype', 1), ('corrResp', 'None'), ('stim', 'O')]),
      OrderedDict([('trialtype', 1), ('corrResp', 'None'), ('stim', 'O')]),
      OrderedDict([('trialtype', 2), ('corrResp', 'space'), ('stim', 'Q')]),
      OrderedDict([('trialtype', 2), ('corrResp', 'space'), ('stim', 'Q')]),
      OrderedDict([('trialtype', 1), ('corrResp', 'None'), ('stim', 'O')]),
      OrderedDict([('trialtype', 1), ('corrResp', 'None'), ('stim', 'O')]),
      OrderedDict([('trialtype', 2), ('corrResp', 'space'), ('stim', 'Q')]),
      OrderedDict([('trialtype', 1), ('corrResp', 'None'), ('stim', 'O')]),
      OrderedDict([('trialtype', 2), ('corrResp', 'space'), ('stim', 'Q')])]
    Routine practicetrial
    Routine feedback
  LoopTerminator practice
  Routine instr2
  Routine wait_for_trigger
  LoopInitiator conditions loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cond', 'fast')]),
      OrderedDict([('cond', 'mod')]),
      OrderedDict([('cond', 'slow')])]
    Routine start_exp
    Routine bl_int1
    LoopInitiator firsthalf loopType="TrialHandler"
      conditionsFile = $cond + 'ER_part_1.csv'
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator firsthalf
    Routine bl_int2
    LoopInitiator secondhalf loopType="TrialHandler"
      conditionsFile = $cond + 'ER_part_2.csv'
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator secondhalf
    Routine pause
  LoopTerminator conditions
  Routine stop_eyetracker
  Routine end
